PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = norm
  Window size (pixels) = [1152, 720]
  color = '#808080'
  colorSpace = hex
  expName = testing1
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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  Routine intro
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    TextboxComponent intro_text
      alignment = center-left
      bold = False
      color = '#000000'
      editable = False
      font = Times New Roman
      letterHeight = 0.1
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Welcome to this research study on educational video content.

        (This study will take approximately 30 minutes to complete.)

        Your responses will be kept confidential and used for research
        purposes only. No personally identifying information will be shared
        in any publication resulting from this research.

        By continuing, you confirm that you agree to participate in this study.

        Press 'SPACE'  to continue.
    KeyboardComponent introresp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine warning
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    TextboxComponent warning_header
      bold = False
      color = '#000000'
      editable = False
      font = Times New Roman
      letterHeight = 0.15
      pos = (0, 0.65)
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
      text = IMPORTANT
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    TextboxComponent warning_text
      alignment = center-left
      bold = False
      color = '#000000'
      editable = False
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, -0.15)
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
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      text:
        - You will watch one video in full. Please do not skip, pause, or
          rewind during playback.
        - Pay close attention, as you will be tested on the content
          immediately afterward.
        - The video and quiz cannot be repeated once completed.
        - Please do not switch to other tabs, applications, or windows
          during the video.

        Press 'SPACE' when you are ready to begin the video.
    KeyboardComponent warning_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine video
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  Routine quiz
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  Routine likert
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    TextComponent likertText
      color = '#000000'
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemText
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    SliderComponent likert_slider
      color = '#000000'
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('Strongly disagree', 'Disagree', 'Somewhat disagree', 'Neither agree nor disagree', 'Somewhat agree', 'Agree', 'Strongly agree')
      letterHeight = 0.036
      pos = (0, -0.4)
      size = (1.5, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    ButtonComponent nextButton
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      font = Times New Roman
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.8, -0.75)
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Next>>
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  Routine quizending
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    TextboxComponent textbox_2
      alignment = center-left
      bold = False
      color = '#000000'
      editable = False
      font = Times New Roman
      letterHeight = 0.1
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
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      text:
        You have completed the quiz.

        Just a few more short questions about your experience, and then
        you'll be finished.

        Press 'SPACE' to continue.
    KeyboardComponent key_resp_quizending
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextboxComponent ending_text
      bold = False
      color = '#000000'
      editable = False
      font = Times New Roman
      letterHeight = 0.1
      size = (1.8, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in this study!

        Your responses have been recorded successfully.
  Routine quizinstruction
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    TextboxComponent textbox
      alignment = center-left
      bold = False
      color = '#000000'
      editable = False
      font = Times New Roman
      letterHeight = 0.1
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Thank you for watching the video.

        You will now answer some questions about what you just watched.

        Please answer based on your own understanding.

        Before the main questions, you will first complete a short sample
        quiz to help you get familiar with how the questions work.

        Press 'SPACE' to begin the questions.
    KeyboardComponent quz_instruction_text
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
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    TextboxComponent instruction_header
      bold = True
      color = '#000000'
      editable = False
      font = Times New Roman
      letterHeight = 0.15
      pos = (0, 0.65)
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
      text = Instructions
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    TextboxComponent instruction_text
      alignment = center-left
      bold = False
      color = '#000000'
      editable = False
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, -0.05)
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
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      text:
        In this study, you will:

        1. Watch a short educational video
        2. Answer a series of questions about what you watched
        3. Answer a few questions about your experience

        Press 'SPACE' to continue.
    KeyboardComponent instruct_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent
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    TextboxComponent consentText
      alignment = top-left
      anchor = top-left
      bold = False
      color = '#000000'
      editable = False
      font = Times New Roman
      letterHeight = 0.03
      pos = (-0.65, 0.38)
      size = (1.3, None)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Participant Information and Consent

        PURPOSE OF THE STUDY
        - This study looks at how people learn from recorded lectures.
        - You will watch short lecture videos and answer questions about them.
        - The study is run by [researcher names] at [university/department].

        WHAT YOU WILL DO
        - Watch [number] lecture video segments on the screen.
        - Answer questions about what you understood.
        - Answer questions about what you thought of the lecture.
        - Fill in a short form about your age, gender, and education.

        HOW LONG IT TAKES
        - The whole session takes about 30 to 45 minutes.
        - Please do not pause, skip, or rewind the videos.
        - Please follow the instructions on the screen.

        PAYMENT
        - You will receive [amount] baht after you finish the session.
        - Payment is made by [cash / method decided by the school].

        YOUR RIGHTS
        - Taking part is voluntary.
        - You can stop and leave at any time. You do not have to give a reason.
        - If you leave, your data will not be stored or used.
        - There is no risk beyond what you meet in everyday life.

        PRIVACY
        - Your name will not be written in your data. You will only have a participant number.
        - Your signed consent form will be kept locked in a separate place.
        - Your data will be stored securely for [number] years.
        - Results will only be reported for the whole group. No one will be identified.

        WHO CAN TAKE PART
        - You must be 18 years or older.
        - You must have normal vision, or vision corrected with glasses or lenses.
        - You must have normal hearing.
        - You must be able to follow a lecture in English.

        QUESTIONS
        - You can ask the experimenter any question before you start.
        - For questions later, contact [name, email, phone].
        - If you have concerns about how the study was run, contact [ethics committee contact].

        CONSENT
        - I have read this information, or it was read to me.
        - I understand that I can stop at any time.
        - I agree to take part in this study.

        If you agree, please tell the experimenter. You will sign the printed consent form before you begin.
    PolygonComponent topMask
      fillColor = '#808080'
      lineColor = '#808080'
      pos = (0, 0.47)
      shape = rectangle
      size = (3, 0.14)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent bottomMask
      fillColor = '#808080'
      lineColor = '#808080'
      pos = (0, -0.42)
      shape = rectangle
      size = (3, 0.16)
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent scrollCode
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import event
        mouse = event.Mouse(win=win)
      Begin Routine:
        scrollY = 0
        startX = -0.65       # left edge of the text
        startY = 0.38        # top edge of the text
        maxScroll = 1.4
        scrollSpeed = 0.05
        atBottom = False
        DEBUG = True         # set to False when you finish tuning
        event.clearEvents()
        mouse.getWheelRel()  # discard old wheel movement
      Each Frame:
        wheel = mouse.getWheelRel()[1]
        keys = event.getKeys(keyList=['up', 'down', 'space'])
        if 'down' in keys:
            wheel -= 2
        if 'up' in keys:
            wheel += 2

        scrollY -= wheel * scrollSpeed
        scrollY = max(0, min(maxScroll, scrollY))
        consentText.pos = (startX, startY + scrollY)

        atBottom = scrollY >= maxScroll - 0.01

        if atBottom and 'space' in keys:
            continueRoutine = False
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine consent
  Routine intro
  Routine instructions
  Routine warning
  Routine video
  Routine quizinstruction
  Routine quiz
  Routine quizending
  LoopInitiator likertLoop loopType="TrialHandler"
    conditionsFile = likert_items.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'itemText': 'The video held my attention throughout.'},
      {'itemText': 'The speaker was easy to understand.'},
      {'itemText': 'I found the content engaging.'},
      {'itemText': 'I would want to watch more videos like this.'},
      {'itemText': 'The pacing of the video felt appropriate.'}]
    Routine likert
  LoopTerminator likertLoop
  Routine end
